PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Treatment170922
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Routines
  Routine welcome
    TextComponent textWelcome
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Willkommen zum BROCAtreat!
        In den folgenden 3 Zyklen wirst du eine künstliche Sprache erlernen. Du wirst 15 Blöcke bearbeiten, die je aus einem Lernteil, einem Testteil und einem Reaktionsteil bestehen. Zwischen den Blöcken kannst du eine Pause einlegen.
    KeyboardComponent key_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine endScreen
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Geschafft!

        Vielen Dank für die Teilnahme!
    KeyboardComponent key_End
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine learnTrial
    TextComponent text_lernblock
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text [set every repeat] = $correct_sentences_1
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  Routine testTrial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if(correctness == 'correct'):
            leftright_key = 'right'
        if(correctness == 'incorrect'):
            leftright_key = 'left'
    TextComponent test_sentences
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text [set every repeat] = $testblock_1
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    KeyboardComponent key_test
      allowedKeys = 'left','right'
      correctAns = $leftright_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine testInstructions
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Jetzt kommt der Testblock.
        Du siehst 10 Sätze. Schätze ein, ob der Satz grammatikalisch korrekt oder inkorrekt ist. Reagiere so schnell wie möglich.

        correct = ->
        incorrect = <-

        Nach jeder Einschätzung bekommst du ein Feedback, ob deine Einschätzung RICHTIG oder FALSCH war.

        Drücke *space* zum Starten des Testteils.
    KeyboardComponent key_start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedbackTest
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if(key_test.corr == 1):
            feedback_text = "RICHTIG"
        else:
                feedback_text = "FALSCH"
    TextComponent text_3
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $feedback_text
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  Routine pause
    TextComponent text_4
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = +
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  Routine learnInstructions
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Du siehst gleich 10 KORREKTE Sätze einer künstlichen Sprache. Jeder Satz bleibt für 7s sichtbar.

        Nach dem Block geht es weiter mit dem Testblock.


        Drücke *space*, um den Lernblock zu starten.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine learnTrial_2
    TextComponent lern_sentences2
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text [set every repeat] = $correct_sentences_2
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  Routine testTrial2
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if(correctness == 'correct'):
            leftright_key = 'right'
        if(correctness == 'incorrect'):
            leftright_key = 'left'
    TextComponent text_sentences2
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text [set every repeat] = $testblock_2
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    KeyboardComponent key_test2
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $leftright_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine testTrial3
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if(correctness == 'correct'):
            leftright_key = 'right'
        if(correctness == 'incorrect'):
            leftright_key = 'left'
    TextComponent test_sentences3
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text [set every repeat] = $testblock_3
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    KeyboardComponent key_test3
      allowedKeys = 'left','right'
      correctAns = $leftright_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine testTrial4
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        if(correctness == 'correct'):
            leftright_key = 'right'
        if(correctness == 'incorrect'):
            leftright_key = 'left'
    TextComponent text_sentences4
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text [set every repeat] = $testblock_4
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    KeyboardComponent key_test4
      allowedKeys = 'left','right'
      correctAns = $leftright_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine testTrial5
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        if(correctness == 'correct'):
            leftright_key = 'right'
        if(correctness == 'incorrect'):
            leftright_key = 'left'
    TextComponent text_sentences5
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text [set every repeat] = $testblock_5
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    KeyboardComponent key_test5
      allowedKeys = 'left','right'
      correctAns = $leftright_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine testTrial6
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        if(correctness == 'correct'):
            leftright_key = 'right'
        if(correctness == 'incorrect'):
            leftright_key = 'left'
    TextComponent text_sentences6
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text [set every repeat] = $testblock_6
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    KeyboardComponent key_test6
      allowedKeys = 'left','right'
      correctAns = $leftright_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine testTrial7
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  Routine testTrial8
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  Routine testTrial9
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  Routine testTrial10
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  Routine testTrial11
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  Routine testTrial12
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  Routine testTrial13
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  Routine testTrial14
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  Routine testTrial15
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  Routine learnTask
    TextComponent text_7
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Lerne die Grammatik!
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  Routine learnTrial_3
    TextComponent text_8
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text [set every repeat] = $correct_sentences_3
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  Routine feedbackTest2
    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Routine:
        if(key_test2.corr == 1):
            feedback_text = "RICHTIG"
        else:
                feedback_text = "FALSCH"
    TextComponent text_9
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $feedback_text
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  Routine trainingInstruktions
    TextComponent text_10
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Wir werden das Vorgehen im Experiment an einem kurzen Beispiel üben.

        Drücke *space*, um das Training zu starten.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine startExperiment
    TextComponent text_11
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Bist du bereit für das Experiment?

        Dann starte es jetzt mit *space*
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine learnTraining
    TextComponent text_12
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text [set every repeat] = $training
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  Routine learnTrainingInstruktions
    TextComponent text_13
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Du siehst gleich 4 KORREKTE Sätze einer künstlichen Grammatik. Jeder Satz bleibt für 7s sichtbar.

        Nach dem Block kommt eine kurze Pause, dann geht es weiter mit dem Testblock.


        Drücke *space*, um den Lernblock zu starten.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine testTrainingInstruktions
    TextComponent text_15
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Jetzt kommt der Testblock.
        Du siehst 4 Sätze. Die Sätze können nach der verwendeten Grammatik korrekt oder inkorrekt sein.
        Schätze ein, ob der Satz grammatikalisch korrekt oder inkorrekt ist. Reagiere so schnell wie möglich.

        correct = ->
        incorrect = <-

        Nach jeder Einschätzung bekommst du ein Feedback, ob deine Einschätzung RICHTIG oder FALSCH war.

        Drücke *space* zum Starten des Testteils
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine testTraining
    CodeComponent code_18
      Code Type = Auto->JS
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      Begin Routine:
        if(correctness == 'correct'):
            leftright_key = 'right'
        if(correctness == 'incorrect'):
            leftright_key = 'left'
    TextComponent text_14
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text [set every repeat] = $training
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    KeyboardComponent key_resp_4
      allowedKeys = 'left','right'
      correctAns = $leftright_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine feedbackTraining
    CodeComponent code_19
      Code Type = Auto->JS
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      Begin Routine:
        if(key_test.corr == 1):
            feedback_text = "RICHTIG"
        else:
                feedback_text = "FALSCH"
    TextComponent text_16
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_text
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  Routine feedbackTest3
    CodeComponent code_20
      Code Type = Auto->JS
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      Begin Routine:
        if(key_test3.corr == 1):
            feedback_text = "RICHTIG"
        else:
                feedback_text = "FALSCH"
    TextComponent text_5
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_text
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  Routine feedbackTest4
    CodeComponent code_32
      Code Type = Auto->JS
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      Begin Routine:
        if(key_test4.corr == 1):
            feedback_text = "RICHTIG"
        else:
                feedback_text = "FALSCH"
    TextComponent text_17
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_text
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  Routine feedbackTest5
    CodeComponent code_31
      Code Type = Auto->JS
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      Begin Routine:
        if(key_test5.corr == 1):
            feedback_text = "RICHTIG"
        else:
                feedback_text = "FALSCH"
    TextComponent text_18
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_text
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  Routine feedbackTest6
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  Routine feedbackTest7
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  Routine feedbackTest8
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  Routine feedbackTest9
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  Routine feedbackTest10
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  Routine feedbackTest11
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  Routine feedbackTest12
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  Routine feedbackTest13
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  Routine feedbackTest14
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  Routine feedbackTest15
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  Routine blockPause
    TextComponent text_29
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Du hast einen Block geschafft!

        Mach eine kurze PAUSE. Wenn du bereit bist, drücke *space*, um den nächsten Block zu starten.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      durationEstim = 10
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine testControlInstructions
    TextComponent text_30
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Du siehst gleich eine farbige Form. Wenn du das rote Quadrat siehst, drücke ‚y‘ und dann *space*.
        Siehst du den gelben Kreis, drücke ’n’und dann *space*.
        Versuche, so schnell wie möglich zu reagieren.

        Drücke *space*, um die nächste Aufgabe zu starten.
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine controlTraining
    ImageComponent rotes_quadrat
      image = BROCANTO_Treatment/rotes_quadrat.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    KeyboardComponent key_resp_8
      allowedKeys = 'y', 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine controlTraining1
    ImageComponent gelber_kreis
      image = BROCANTO_Treatment/gelber_kreis.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp_10
      allowedKeys = 'n', 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  Routine trainingInstruktions
  Routine learnTrainingInstruktions
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:4
    conditionsFile = BROCANTO_Treatment/sentences_lists/training.xlsx
    loopType = random
    nReps = 1
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    Routine learnTraining
    Routine pause
  LoopTerminator trials
  Routine testTrainingInstruktions
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = BROCANTO_Treatment/sentences_lists/training1.xlsx
    loopType = random
    nReps = 1
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    Routine testTraining
    Routine feedbackTraining
  LoopTerminator trials_2
  Routine testControlInstructions
  Routine controlTraining
  Routine startExperiment
  Routine learnInstructions
  Routine learnTask
  LoopInitiator trialslearn loopType="TrialHandler"
    conditionsFile = BROCANTO_Treatment/sentences_lists/correct_sentences_1.xlsx
    loopType = random
    nReps = 1
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    Routine learnTrial
    Routine pause
  LoopTerminator trialslearn
  Routine testInstructions
  LoopInitiator trialstest loopType="TrialHandler"
    conditionsFile = BROCANTO_Treatment/sentences_lists/t_1.xlsx
    loopType = random
    nReps = 1
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    Routine testTrial
    Routine feedbackTest
  LoopTerminator trialstest
  Routine testControlInstructions
  Routine controlTraining
  Routine learnInstructions
  Routine learnTask
  LoopInitiator trialslearn2 loopType="TrialHandler"
    conditionsFile = BROCANTO_Treatment/sentences_lists/correct_sentences_2.xlsx
    loopType = random
    nReps = 1
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    Routine learnTrial_2
    Routine pause
  LoopTerminator trialslearn2
  Routine testInstructions
  LoopInitiator trialstest2 loopType="TrialHandler"
    conditionsFile = BROCANTO_Treatment/sentences_lists/t_2.xlsx
    loopType = random
    nReps = 1
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    Routine testTrial2
    Routine feedbackTest2
  LoopTerminator trialstest2
  Routine testControlInstructions
  Routine controlTraining1
  Routine learnInstructions
  Routine learnTask
  LoopInitiator trialslearn3 loopType="TrialHandler"
    conditionsFile = BROCANTO_Treatment/sentences_lists/correct_sentences_3.xlsx
    loopType = random
    nReps = 1
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    Routine learnTrial_3
    Routine pause
  LoopTerminator trialslearn3
  Routine testInstructions
  LoopInitiator trialstest3 loopType="TrialHandler"
    conditionsFile = BROCANTO_Treatment/sentences_lists/t_3.xlsx
    loopType = random
    nReps = 1
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    Routine testTrial3
    Routine feedbackTest3
  LoopTerminator trialstest3
  Routine testControlInstructions
  Routine controlTraining1
  Routine learnInstructions
  Routine learnTask
  LoopInitiator trialslearn4 loopType="TrialHandler"
    conditionsFile = BROCANTO_Treatment/sentences_lists/correct_sentences_1.xlsx
    loopType = random
    nReps = 1
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    Routine learnTrial
    Routine pause
  LoopTerminator trialslearn4
  Routine testInstructions
  LoopInitiator trialstest4 loopType="TrialHandler"
    conditionsFile = BROCANTO_Treatment/sentences_lists/t_4.xlsx
    loopType = random
    nReps = 1
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    Routine testTrial4
    Routine feedbackTest4
  LoopTerminator trialstest4
  Routine testControlInstructions
  Routine controlTraining
  Routine learnInstructions
  Routine learnTask
  LoopInitiator trialslearn5 loopType="TrialHandler"
    conditionsFile = BROCANTO_Treatment/sentences_lists/correct_sentences_2.xlsx
    loopType = random
    nReps = 1
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    Routine learnTrial_2
    Routine pause
  LoopTerminator trialslearn5
  Routine testInstructions
  LoopInitiator trialstest5 loopType="TrialHandler"
    conditionsFile = BROCANTO_Treatment/sentences_lists/t_5.xlsx
    loopType = random
    nReps = 1
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    Routine testTrial5
    Routine feedbackTest5
  LoopTerminator trialstest5
  Routine testControlInstructions
  Routine controlTraining1
  Routine blockPause
  Routine learnInstructions
  Routine learnTask
  LoopInitiator trialslearn6 loopType="TrialHandler"
    conditionsFile = BROCANTO_Treatment/sentences_lists/correct_sentences_3.xlsx
    loopType = random
    nReps = 1
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    Routine learnTrial_3
    Routine pause
  LoopTerminator trialslearn6
  Routine testInstructions
  LoopInitiator trialstest6 loopType="TrialHandler"
    conditionsFile = BROCANTO_Treatment/sentences_lists/t_6.xlsx
    loopType = random
    nReps = 1
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    Routine testTrial6
    Routine feedbackTest6
  LoopTerminator trialstest6
  Routine testControlInstructions
  Routine controlTraining
  Routine learnInstructions
  Routine learnTask
  LoopInitiator trialslearn7 loopType="TrialHandler"
    conditionsFile = BROCANTO_Treatment/sentences_lists/correct_sentences_1.xlsx
    loopType = random
    nReps = 1
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    Routine learnTrial
    Routine pause
  LoopTerminator trialslearn7
  Routine testInstructions
  LoopInitiator trialstest7 loopType="TrialHandler"
    conditionsFile = BROCANTO_Treatment/sentences_lists/t_7.xlsx
    loopType = random
    nReps = 1
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    Routine testTrial7
    Routine feedbackTest7
  LoopTerminator trialstest7
  Routine testControlInstructions
  Routine controlTraining1
  Routine learnInstructions
  Routine learnTask
  LoopInitiator trialslearn8 loopType="TrialHandler"
    conditionsFile = BROCANTO_Treatment/sentences_lists/correct_sentences_2.xlsx
    loopType = random
    nReps = 1
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    Routine learnTrial_2
    Routine pause
  LoopTerminator trialslearn8
  Routine testInstructions
  LoopInitiator trialstest8 loopType="TrialHandler"
    conditionsFile = BROCANTO_Treatment/sentences_lists/t_8.xlsx
    loopType = random
    nReps = 1
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    Routine testTrial8
    Routine feedbackTest8
  LoopTerminator trialstest8
  Routine testControlInstructions
  Routine controlTraining
  Routine learnInstructions
  Routine learnTask
  LoopInitiator trialslearn9 loopType="TrialHandler"
    conditionsFile = BROCANTO_Treatment/sentences_lists/correct_sentences_3.xlsx
    loopType = random
    nReps = 1
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    Routine learnTrial_3
    Routine pause
  LoopTerminator trialslearn9
  Routine testInstructions
  LoopInitiator trialstest9 loopType="TrialHandler"
    conditionsFile = BROCANTO_Treatment/sentences_lists/t_9.xlsx
    loopType = random
    nReps = 1
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    Routine testTrial9
    Routine feedbackTest9
  LoopTerminator trialstest9
  Routine testControlInstructions
  Routine controlTraining
  Routine learnInstructions
  Routine learnTask
  LoopInitiator trialslearn10 loopType="TrialHandler"
    conditionsFile = BROCANTO_Treatment/sentences_lists/correct_sentences_1.xlsx
    loopType = random
    nReps = 1
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    Routine learnTrial
    Routine pause
  LoopTerminator trialslearn10
  Routine testInstructions
  LoopInitiator trialstest10 loopType="TrialHandler"
    conditionsFile = BROCANTO_Treatment/sentences_lists/t_10.xlsx
    loopType = random
    nReps = 1
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    Routine testTrial10
    Routine feedbackTest10
  LoopTerminator trialstest10
  Routine testControlInstructions
  Routine controlTraining1
  Routine blockPause
  Routine learnInstructions
  Routine learnTask
  LoopInitiator trialslearn11 loopType="TrialHandler"
    conditionsFile = BROCANTO_Treatment/sentences_lists/correct_sentences_2.xlsx
    loopType = random
    nReps = 1
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    Routine learnTrial_2
    Routine pause
  LoopTerminator trialslearn11
  Routine testInstructions
  LoopInitiator trialstest11 loopType="TrialHandler"
    conditionsFile = BROCANTO_Treatment/sentences_lists/t_11.xlsx
    loopType = random
    nReps = 1
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    Routine testTrial11
    Routine feedbackTest11
  LoopTerminator trialstest11
  Routine testControlInstructions
  Routine controlTraining1
  Routine learnInstructions
  Routine learnTask
  LoopInitiator trialslearn12 loopType="TrialHandler"
    conditionsFile = BROCANTO_Treatment/sentences_lists/correct_sentences_3.xlsx
    loopType = random
    nReps = 1
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    Routine learnTrial_3
    Routine pause
  LoopTerminator trialslearn12
  Routine testInstructions
  LoopInitiator trialstest12 loopType="TrialHandler"
    conditionsFile = BROCANTO_Treatment/sentences_lists/t_12.xlsx
    loopType = random
    nReps = 1
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    Routine testTrial12
    Routine feedbackTest12
  LoopTerminator trialstest12
  Routine testControlInstructions
  Routine controlTraining
  Routine learnInstructions
  Routine learnTask
  LoopInitiator trialslearn13 loopType="TrialHandler"
    conditionsFile = BROCANTO_Treatment/sentences_lists/correct_sentences_1.xlsx
    loopType = random
    nReps = 1
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    Routine learnTrial
    Routine pause
  LoopTerminator trialslearn13
  Routine testInstructions
  LoopInitiator trialstest13 loopType="TrialHandler"
    conditionsFile = BROCANTO_Treatment/sentences_lists/t_13.xlsx
    loopType = random
    nReps = 1
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    Routine testTrial13
    Routine feedbackTest13
  LoopTerminator trialstest13
  Routine controlTraining1
  Routine learnInstructions
  Routine learnTask
  LoopInitiator trialslearn14 loopType="TrialHandler"
    conditionsFile = BROCANTO_Treatment/sentences_lists/correct_sentences_2.xlsx
    loopType = random
    nReps = 1
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    Routine learnTrial_2
    Routine pause
  LoopTerminator trialslearn14
  Routine testInstructions
  Routine learnTask
  LoopInitiator trialstest14 loopType="TrialHandler"
    conditionsFile = BROCANTO_Treatment/sentences_lists/t_14.xlsx
    loopType = random
    nReps = 1
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    Routine testTrial14
    Routine feedbackTest14
  LoopTerminator trialstest14
  Routine controlTraining
  Routine learnInstructions
  Routine learnTask
  LoopInitiator trialslearn15 loopType="TrialHandler"
    conditionsFile = BROCANTO_Treatment/sentences_lists/correct_sentences_3.xlsx
    loopType = random
    nReps = 1
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    Routine learnTrial_3
    Routine pause
  LoopTerminator trialslearn15
  Routine testInstructions
  LoopInitiator trialstest15 loopType="TrialHandler"
    conditionsFile = BROCANTO_Treatment/sentences_lists/t_15.xlsx
    loopType = random
    nReps = 1
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    Routine testTrial15
    Routine feedbackTest15
  LoopTerminator trialstest15
  Routine controlTraining
  Routine endScreen
